OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)

Acquisition client "LSL Receiver" => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1025
#0.Signal stream -> Signal average => #1
Graz Motor Imagery BCI Stimulator => #2
  Lua Script = ${Player_ScenarioDirectory}/motor-imagery-bci-graz-stimulator.lua
  Number of Trials for Each Class = 20
  First Class = OVTK_GDF_Left
  Second Class = OVTK_GDF_Right
  Baseline Duration (in sec) = 20
  Wait For Beep Duration (in sec) = 2
  Wait For Cue Duration (in sec) = 1
  Display Cue Duration (in sec) = 1.250
  Feedback Duration (in sec) = 3.750
  End of Trial Minimum Duration (in sec) = 1.500
  End of Trial Maximum Duration (in sec) = 3.500
Input stream 2=#0.Signal stream, Input stream 3=#2 -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/signals/motor-imagery-1-[$core{date}-$core{time}].ov
  Use compression = false
Stimulations=#2, Amplitude=#1 -> Graz visualization
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = false
  Predictions to integrate = 5
  Positive feedback only = false
