OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 40
  Band Pass Ripple (dB) = 0.5
-> Signal Decimation => #2
  Decimation factor = 8
Graz Motor Imagery BCI Stimulator => #3
  Lua Script = C:/Program Files/openvibe-3.2.0-64bit/share/openvibe/scenarios/bci-examples/motor-imagery-CSP/motor-imagery-bci-graz-stimulator.lua
  Number of Trials for Each Class = 10
  First Class = OVTK_GDF_Left
  Second Class = OVTK_GDF_Right
  Baseline Duration (in sec) = 20
  Wait For Beep Duration (in sec) = 2
  Wait For Cue Duration (in sec) = 1
  Display Cue Duration (in sec) = 1.250
  Feedback Duration (in sec) = 3.750
  End of Trial Minimum Duration (in sec) = 1.500
  End of Trial Maximum Duration (in sec) = 3.500
Stimulations=#3 -> Graz visualization
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = false
  Predictions to integrate = 5
  Positive feedback only = false
Data=#2, Stimulations=#3 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input signal=#2, Input stimulations=#3 -> LSL Export
  Signal stream = openvibeSignal
  Marker stream = openvibeMarkers
Input Signal=#0.Signal stream, Input Stimulations=#3 -> Generic stream writer
  Filename = D:/SEIDI/motor_mi_GO107_online_6d.ov
  Use compression = false
